# Generated by Configurator on Fri Dec 15 14:02:01 CET 2023

# Reset
Property,Core,Initialize,0

# Devices
Device,PyHub,PyDevice,PyHub
Device,cam,PyDevice,Camera:cam

# Pre-init settings for devices
Property,PyHub,PythonEnvironment,(auto)
Property,PyHub,ScriptPath,../examples/camera.py
# Pre-init settings for COM ports

# Hub (parent) references
Parent,cam,PyHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,cam
Property,Core,AutoShutter,1
# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

